<configuration>
<version>2</version>
<readers>
    <reader>
        <classname>AcquisitionReader</classname>
        <dll>gadgetron_core_readers</dll>
    </reader>
</readers>

<stream>
    <external>
<!--        <execute name="gadm.gadgetron_dataflow_monitor full path or path relative to gadgetron start dir" target="start_monitor" type="python" />-->
        <execute name="gadm.gadgetron_dataflow_monitor" target="start_monitor" type="python" />
<!--            <execute name="gadm.dummy_gadget" target="EmptyPythonGadget" type="python" />-->
        <configuration />
    </external>
</stream>

<writers>
<writer>
    <classname>ImageWriter</classname>
    <dll>gadgetron_core_writers</dll>
</writer>
</writers>
</configuration>